PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1080, 1000]
  expName = lexical design task
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent word_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $words_list
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = next 
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  Routine Instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Following experiment has a list of words

        You have to memorize as many words as possible. When you have finished remembering the words, you will be provided with a text box and you have to write down as many words as you can remember
    ButtonComponent button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Start
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  Routine trials_2
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Write down as many words as you can remember
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    ButtonComponent button_3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Submit
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = words list.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'words_list': 'garden', 'frequency': 'high'},
      {'words_list': 'another', 'frequency': 'high'},
      {'words_list': 'suddenly', 'frequency': 'high'},
      {'words_list': 'morning', 'frequency': 'high'},
      {'words_list': 'going', 'frequency': 'high'},
      {'words_list': 'narrator', 'frequency': 'high'},
      {'words_list': 'cat', 'frequency': 'high'},
      {'words_list': 'town', 'frequency': 'high'},
      {'words_list': 'because', 'frequency': 'high'},
      {'words_list': 'sea', 'frequency': 'high'},
      {'words_list': 'sun', 'frequency': 'high'},
      {'words_list': 'unlike', 'frequency': 'high'},
      {'words_list': 'declutter', 'frequency': 'high'},
      {'words_list': 'voyage', 'frequency': 'high'},
      {'words_list': 'abjective', 'frequency': 'low'},
      {'words_list': 'pseudomorphic', 'frequency': 'low'},
      {'words_list': 'caustic', 'frequency': 'low'},
      {'words_list': 'bolster', 'frequency': 'low'},
      {'words_list': 'equivocal', 'frequency': 'low'},
      {'words_list': 'capricious', 'frequency': 'low'},
      {'words_list': 'estoric', 'frequency': 'low'},
      {'words_list': 'xenophobia', 'frequency': 'low'},
      {'words_list': 'diallelus', 'frequency': 'low'},
      {'words_list': 'glamping', 'frequency': 'low'}]
    Routine trial
  LoopTerminator trials
  Routine trials_2
